PsychoPy2experiment version="1.84.2"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'participant': u''}
  expName = chi18_experiment
  Units = use prefs
  Screen = 1
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Routines
  Routine face_x_instructions
    TextComponent face_x_Instrtext
      text [set every repeat] = $face_x_instructions_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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    KeyboardComponent face_x_Instrresp
      durationEstim = 5
      forceEndRoutine = True
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine song_x_instructions
    TextComponent song_x_Instrtext
      text [set every repeat] = $song_x_instructions_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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    KeyboardComponent song_x_Instrresp
      durationEstim = 5
      forceEndRoutine = True
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine breatheopen
    CodeComponent breatheopen_code
      Begin Routine:
        taskname = 'breatheopen'
        send_message(taskname+'_start')
      End Routine:
        send_message(taskname+'_end')
    TextComponent breatheopen_cross
      text = +
      stopVal [duration (s)] = $task_length
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    SoundComponent breatheopen_end
      sound = stimuli/01.wav
      stopVal [duration (s)] = 0.5
      startEstim = 10
      startVal [time (s)] = $task_length
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  Routine breatheclosed
    CodeComponent breatheclosed_code
      Begin Routine:
        taskname = 'breatheclosed'
        send_message(taskname+'_start')
      End Routine:
        send_message(taskname+'_end')
    SoundComponent breatheclosed_stop
      sound = stimuli/01.wav
      stopVal [duration (s)] = 0.5
      startEstim = 10
      startVal [time (s)] = $task_length
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  Routine word_c_instructions
    TextComponent word_c_Instrtext
      text [set every repeat] = $word_c_instructions_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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    KeyboardComponent word_c_Instrresp
      durationEstim = 5
      forceEndRoutine = True
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine word_x_instructions
    TextComponent word_x_Instrtext
      text [set every repeat] = $word_x_instructions_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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    KeyboardComponent word_x_Instrresp
      durationEstim = 5
      forceEndRoutine = True
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent end_text
      durationEstim = 3
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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      text:
        That is the end of the experiment.

        Thank you for participating!



        Press the space bar to close.
    KeyboardComponent end_resp
      durationEstim = 3
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine sport_c
    CodeComponent sport_c_code
      Begin Routine:
        taskname = 'sport_c'
        send_message(taskname+'_start')
      End Routine:
        send_message(taskname+'_end')
    TextComponent sport_c_cross
      text = +
      stopVal [duration (s)] = $task_length
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    SoundComponent sport_c_end
      sound = stimuli/01.wav
      stopVal [duration (s)] = 0.5
      startEstim = 10
      startVal [time (s)] = $task_length
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  Routine song_c_instructions
    TextComponent song_c_Instrtext
      text [set every repeat] = $song_c_instructions_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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    KeyboardComponent song_c_Instrresp
      durationEstim = 5
      forceEndRoutine = True
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine phrase_c
    CodeComponent phrase_c_code
      Begin Routine:
        taskname = 'phrase_c'
        send_message(taskname+'_start')
      End Routine:
        send_message(taskname+'_end')
    TextComponent phrase_c_cross
      text = +
      stopVal [duration (s)] = $task_length
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    SoundComponent phrase_c_stop
      sound = stimuli/01.wav
      stopVal [duration (s)] = 0.5
      startEstim = 10
      startVal [time (s)] = $task_length
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  Routine sport_x
    CodeComponent sport_x_code
      Begin Routine:
        taskname = 'sport_x'
        send_message(taskname+'_start')
      End Routine:
        send_message(taskname+'_end')
    TextComponent sport_x_cross
      text = +
      stopVal [duration (s)] = $task_length
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    SoundComponent sport_x_end
      sound = stimuli/01.wav
      stopVal [duration (s)] = 0.5
      startEstim = 10
      startVal [time (s)] = $task_length
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  Routine phrase_x
    CodeComponent phrase_x_code
      Begin Routine:
        taskname = 'phrase_x'
        send_message(taskname+'_start')
      End Routine:
        send_message(taskname+'_end')
    TextComponent phrase_x_cross
      text = +
      stopVal [duration (s)] = $task_length
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    SoundComponent phrase_x_stop
      sound = stimuli/01.wav
      stopVal [duration (s)] = 0.5
      startEstim = 10
      startVal [time (s)] = $task_length
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  Routine phrase_x_instructions
    TextComponent phrase_x_Instrtext
      text [set every repeat] = $phrase_x_instructions_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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    KeyboardComponent phrase_x_Instrresp
      durationEstim = 5
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine word_x
    CodeComponent word_x_code
      Begin Routine:
        taskname = 'word_x'
        send_message(taskname+'_start')
      End Routine:
        send_message(taskname+'_end')
    TextComponent word_x_cross
      text = +
      stopVal [duration (s)] = $task_length
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    SoundComponent word_x_stop
      sound = stimuli/01.wav
      stopVal [duration (s)] = 0.5
      startEstim = 10
      startVal [time (s)] = $task_length
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  Routine sport_c_instructions
    TextComponent sport_c_Instrtext
      text [set every repeat] = $sport_c_instructions_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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    KeyboardComponent sport_c_Intrresp
      durationEstim = 5
      forceEndRoutine = True
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine sport_x_instructions
    TextComponent sport_x_Instrtext
      text [set every repeat] = $sport_x_instructions_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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    KeyboardComponent sport_x_Instrresp
      durationEstim = 5
      forceEndRoutine = True
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
    CodeComponent welc_code
      Begin Experiment:
        import OSC
        client = OSC.OSCClient()
        client.connect(('127.0.0.1', 5000))

        def send_message (addr):
            msg = OSC.OSCMessage()
            msg.setAddress('/Marker/'+addr)
            client.send(msg)

        task_length = 5
        font_size = 0.065

        send_message('calibration_start')
      End Experiment:
        send_message('calibration_end')
    TextComponent welc_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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      text:
        ﻿Welcome!

        We will begin the experiment shortly.

        I will ask you to perform a sequence of ten different tasks while you are in this sitting, stationary position wearing the EEG device.

        Please find a comfortable posture now and try to stay still during the experiment.

        I will explain each task before it begins. Each task will be repeated ten times total, in two groups of five each. If you need to pause at any time, just let me know.

        To advance to the next screen please press the bottom button on the clicker. Please try not to press this button until you’re instructed to in the future.

        Press the button on the clicker when you're ready to begin.
    KeyboardComponent welc_resp
      durationEstim = 5
      forceEndRoutine = True
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine breatheopen_instructions
    TextComponent breatheopen_Instrtext
      text [set every repeat] = $breatheopen_instructions_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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    KeyboardComponent breatheopen_Instrresp
      durationEstim = 5
      forceEndRoutine = True
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine phrase_c_instructions
    TextComponent phrase_c_Instrtext
      text [set every repeat] = $phrase_c_instructions_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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    KeyboardComponent phrase_c_Instrresp
      durationEstim = 5
      forceEndRoutine = True
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine word_c
    CodeComponent word_c_code
      Begin Routine:
        taskname = 'word_c'
        send_message(taskname+'_start')
      End Routine:
        send_message(taskname+'_end')
    TextComponent word_c_cross
      text = +
      stopVal [duration (s)] = $task_length
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    SoundComponent word_c_stop
      sound = stimuli/01.wav
      stopVal [duration (s)] = 0.5
      startEstim = 10
      startVal [time (s)] = $task_length
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  Routine face_x
    CodeComponent face_x_code
      Begin Routine:
        taskname = 'face_x'
        send_message(taskname+'_start')
      End Routine:
        send_message(taskname+'_end')
    TextComponent face_x_cross
      text = +
      stopVal [duration (s)] = $task_length
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    SoundComponent face_x_stop
      sound = stimuli/01.wav
      stopVal [duration (s)] = 0.5
      startEstim = 10
      startVal [time (s)] = $task_length
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  Routine song_c
    CodeComponent song_c_code
      Begin Routine:
        taskname = 'song_c'
        send_message(taskname+'_start')
      End Routine:
        send_message(taskname+'_end')
    TextComponent song_c_cross
      text = +
      stopVal [duration (s)] = $task_length
      durationEstim = 1-
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    SoundComponent song_c_end
      sound = stimuli/01.wav
      stopVal [duration (s)] = 0.5
      startEstim = 10
      startVal [time (s)] = $task_length
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  Routine breatheclosed_instructions
    TextComponent breatheclosed_Instrtext
      text [set every repeat] = $breatheclosed_instructions_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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    KeyboardComponent breatheclosed_Instrresp
      durationEstim = 5
      forceEndRoutine = True
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
  Routine face_c_instructions
    TextComponent face_c_Instrtext
      text [set every repeat] = $face_c_instructions_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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    KeyboardComponent face_c_Instrresp
      durationEstim = 5
      forceEndRoutine = True
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine song_x
    CodeComponent song_x_code
      Begin Routine:
        taskname = 'song_x'
        send_message(taskname+'_start')
      End Routine:
        send_message(taskname+'_end')
    TextComponent song_x_cross
      text = +
      stopVal [duration (s)] = $task_length
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    SoundComponent song_x_end
      sound = stimuli/01.wav
      stopVal [duration (s)] = 0.5
      startEstim = 10
      startVal [time (s)] = $task_length
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  Routine face_c
    CodeComponent face_c_code
      Begin Routine:
        taskname = 'face_c'
        send_message(taskname+'_start')
      End Routine:
        send_message(taskname+'_end')
    TextComponent face_c_cross
      text = +
      stopVal [duration (s)] = $task_length
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    SoundComponent face_c_stop
      sound = stimuli/01.wav
      stopVal [duration (s)] = 0.5
      startEstim = 10
      startVal [time (s)] = $task_length
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Flow
  Routine welcome
  LoopInitiator experiment_runs loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    LoopInitiator breatheclosed_loop loopType="TrialHandler"
      conditionsFile = task_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{u'breatheopen_instructions_text': u"For this task, please keep your eyes open, look at the cross on the screen, and focus on your breathing. You may blink normally. Breathe at a speed that is comfortable for you, and try to relax as best you can.\n\nThe task will last 10 seconds.\n\nBefore you start, do a short practice now. Breathe with your eyes open, relaxing your mind as you do. Do this for a few seconds.\n\nPress the button on the clicker when you're ready to begin.", u'phrase_c_instructions_text': u'In the next task, you will be imagining hearing a spoken phrase repeatedly in your mind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,
        {u'breatheopen_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the clicker when you're ready to begin.", u'phrase_c_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the clicker when you're ready to begin.", u'word_x_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the clicker when you're ready to begin.", u'face_x_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on th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,
        {u'breatheopen_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the clicker when you're ready to begin.", u'phrase_c_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the clicker when you're ready to begin.", u'word_x_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the clicker when you're ready to begin.", u'face_x_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on th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,
        {u'breatheopen_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the clicker when you're ready to begin.", u'phrase_c_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the clicker when you're ready to begin.", u'word_x_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the clicker when you're ready to begin.", u'face_x_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on th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
      Routine breatheclosed_instructions
      Routine breatheclosed
    LoopTerminator breatheclosed_loop
    LoopInitiator word_x_loop loopType="TrialHandler"
      conditionsFile = task_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine word_x_instructions
      Routine word_x
    LoopTerminator word_x_loop
    LoopInitiator word_c_loop loopType="TrialHandler"
      conditionsFile = task_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine word_c_instructions
      Routine word_c
    LoopTerminator word_c_loop
    LoopInitiator phrase_x_loop loopType="TrialHandler"
      conditionsFile = task_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine phrase_x_instructions
      Routine phrase_x
    LoopTerminator phrase_x_loop
    LoopInitiator phrase_c_loop loopType="TrialHandler"
      conditionsFile = task_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine phrase_c_instructions
      Routine phrase_c
    LoopTerminator phrase_c_loop
    LoopInitiator face_x_loop loopType="TrialHandler"
      conditionsFile = task_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine face_x_instructions
      Routine face_x
    LoopTerminator face_x_loop
    LoopInitiator face_c_loop loopType="TrialHandler"
      conditionsFile = task_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine face_c_instructions
      Routine face_c
    LoopTerminator face_c_loop
    LoopInitiator breatheopen_loop loopType="TrialHandler"
      conditionsFile = task_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine breatheopen_instructions
      Routine breatheopen
    LoopTerminator breatheopen_loop
    LoopInitiator song_x_loop loopType="TrialHandler"
      conditionsFile = task_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine song_x_instructions
      Routine song_x
    LoopTerminator song_x_loop
    LoopInitiator song_c_loop loopType="TrialHandler"
      conditionsFile = task_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine song_c_instructions
      Routine song_c
    LoopTerminator song_c_loop
    LoopInitiator sport_x_loop loopType="TrialHandler"
      conditionsFile = task_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine sport_x_instructions
      Routine sport_x
    LoopTerminator sport_x_loop
    LoopInitiator sport_c_loop loopType="TrialHandler"
      conditionsFile = task_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine sport_c_instructions
      Routine sport_c
    LoopTerminator sport_c_loop
  LoopTerminator experiment_runs
  Routine end
